PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = mReversalBeta2
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Routines
  Routine trial1
    MouseComponent trial1Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial1CursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False

        # psychoJS.window

        targetAngles = [30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60]
        #targetAngles = [(t/180)*pi for t in targetAngles]

        #mouse = event.Mouse(visible = False)
        #mouse = new psychoJS.event.Mouse({"visible": false});


        # document.getElementById('hide_id').style.cursor = 'none';
        # document.documentElement.style.cursor = 'none';
      Begin Routine:
        targetangle = targetAngles[trials1.thisN]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        # Math.PI
        # Math.cos()
        # Math.sin()

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trial1Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial1Num.text = str(trials1.thisN+1)+' / 20'

        trial1Cursor.pos = (1.5,1.5)
        trial1Mouse.pos = (1.5,1.5)
      Each Frame:
        CursorTargetDistance = sqrt((trial1Cursor.pos[0]-trial1Target.pos[0])**2 + (trial1Cursor.pos[1]-trial1Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial1Cursor.pos[0]**2 + trial1Cursor.pos[1]**2)

        steps.append(trial1Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial1Step = 1
            if (CursorHomeDistance < .025):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial1Step = 2
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial1Step = 3
            if (CursorHomeDistance < .025):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Experiment:
        win.mouseVisible = True

        # psychoJS.window.mouseVisible = true;
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial1Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial1Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial1Cursor
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (trial1Mouse.getPos()[0], trial1Mouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial1Step
      saveEndRoutine = False
      saveFrameValue = all
      saveStartStop = False
      startExpValue = 0
      syncScreenRefresh = True
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    TextComponent trial1Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 20
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  Routine instructions1
    TextComponent instr1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task use your mouse to move the cursor (in black) between the middle start position and the outward targets (both in white). Always try to move as straight and smooth as possible. Whenever you make an error, just do better on the next trial and continue as best you can. There will be 20 trials in this first set. Press ‘space’ to start.
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    KeyboardComponent instr1Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent codeFixes1
      Code Type = Auto->JS
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    CodeComponent codeFixes2
      Code Type = Auto->JS
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation1
    TextComponent fix1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instructions2
    TextComponent instr2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = For the next block of trials, the cursor movement will be mirrored over the Y-axis. Again, use your mouse to move the cursor (in black) between the middle start position and the outward targets (both in white). Always try to move as straight and smooth as possible. Whenever you make an error, just do better on the next trial and continue as best you can. There will be 90 trials in this next set. Press ‘space’ to start.
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    KeyboardComponent instr2Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation2
    TextComponent fix2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial2
    MouseComponent trial2Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial2CursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False

        # psychoJS.window

        targetAngles = [30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 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60]
        #targetAngles = [(t/180)*pi for t in targetAngles]

        #mouse = event.Mouse(visible = False)
        #mouse = new psychoJS.event.Mouse({"visible": false});


        # document.getElementById('hide_id').style.cursor = 'none';
        # document.documentElement.style.cursor = 'none';
      Begin Routine:
        targetangle = targetAngles[trials2.thisN]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        # Math.PI
        # Math.cos()
        # Math.sin()

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trial2Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial2Num.text = str(trials2.thisN+1)+' / 90'

        trial2Cursor.pos = (1.5,1.5)
        trial2Mouse.pos = (1.5,1.5)
      Each Frame:
        CursorTargetDistance = sqrt((trial2Cursor.pos[0]-trial2Target.pos[0])**2 + (trial2Cursor.pos[1]-trial2Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial2Cursor.pos[0]**2 + trial2Cursor.pos[1]**2)

        steps.append(trial2Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial2Step = 1
            if (CursorHomeDistance < .025):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial2Step = 2
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial2Step = 3
            if (CursorHomeDistance < .025):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial2Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial2Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial2Cursor
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (-(trial2Mouse.getPos()[0]), trial2Mouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial2Step
      saveEndRoutine = False
      saveFrameValue = all
      saveStartStop = False
      startExpValue = 0
      syncScreenRefresh = True
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    TextComponent trial2Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 90
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  Routine instructions3
    TextComponent instr3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = For the next block of trials, the cursor movement will be normal. Again, use your mouse to move the cursor (in black) between the middle start position and the outward targets (both in white). Always try to move as straight and smooth as possible. Whenever you make an error, just do better on the next trial and continue as best you can. There will be 20 trials in this next set. Press ‘space’ to start.
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    KeyboardComponent instr3Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation3
    TextComponent fix3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial3
    MouseComponent trial3Mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent trial3CursorCode
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False

        # psychoJS.window

        targetAngles = [30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60]
        #targetAngles = [(t/180)*pi for t in targetAngles]

        #mouse = event.Mouse(visible = False)
        #mouse = new psychoJS.event.Mouse({"visible": false});


        # document.getElementById('hide_id').style.cursor = 'none';
        # document.documentElement.style.cursor = 'none';
      Begin Routine:
        targetangle = targetAngles[trials3.thisN]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        # Math.PI
        # Math.cos()
        # Math.sin()

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trial3Step = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trial3Num.text = str(trials3.thisN+1)

        trial3Cursor.pos = (1.5,1.5)
        trial3Mouse.pos = (1.5,1.5)
      Each Frame:
        CursorTargetDistance = sqrt((trial3Cursor.pos[0]-trial3Target.pos[0])**2 + (trial3Cursor.pos[1]-trial3Target.pos[1])**2)
        CursorHomeDistance = sqrt(trial3Cursor.pos[0]**2 + trial3Cursor.pos[1]**2)

        steps.append(trial3Step)
        # steps.push(step)

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trial3Step = 1
            if (CursorHomeDistance < .025):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trial3Step = 2
            if (CursorTargetDistance < .025):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trial3Step = 3
            if (CursorHomeDistance < .025):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trial3Target
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial3Home
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trial3Cursor
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (trial3Mouse.getPos()[0], trial3Mouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trial3Step
      startExpValue = 0
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    TextComponent trial3Num
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = 20
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    TextComponent trial3Text
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text =            / 20
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Flow
  Routine instructions1
  Routine fixation1
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = mReversalCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 1)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 2)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 3)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 4)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 5)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 6)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 7)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 8)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 9)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 10)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 11)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 12)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 13)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 14)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 15)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 16)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 17)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 18)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 19)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 1), ('trialNum', 20)])]
    Routine trial1
  LoopTerminator trials1
  Routine instructions2
  Routine fixation2
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = mReversalCond2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 21)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 22)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 23)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 24)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 25)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 26)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 27)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 28)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 29)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 30)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 31)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 32)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 33)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 34)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 35)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 36)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 37)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 38)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 39)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 40)]),
      OrderedDict([('trialsType', -1), ('trialsNum', 2), ('trialNum', 41)])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
    Routine trial2
  LoopTerminator trials2
  Routine instructions3
  Routine fixation3
  LoopInitiator trials3 loopType="TrialHandler"
    conditionsFile = mReversalCond3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 111)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 112)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 113)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 114)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 115)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 116)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 117)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 118)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 119)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 120)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 121)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 122)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 123)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 124)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 125)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 126)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 127)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 128)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 129)]),
      OrderedDict([('trialsType', 1), ('trialsNum', 3), ('trialNum', 130)])]
    Routine trial1
  LoopTerminator trials3
  Routine end
